PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['conditions.csv', 'conditions_letter.csv', 'stimuli/mouse_left_letter.jpg', 'stimuli/mouse_right_letter.jpg', 'stimuli/mouse.jpg', 'stimuli/mouse_left.jpg', 'stimuli/mouse_mask.jpg', 'stimuli/mouse_none.jpg', 'stimuli/mouse_right.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = mouse
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    ImageComponent mouse_none
      image = stimuli/mouse_none.jpg
      mask = stimuli/mouse_mask.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent image
      image [set every repeat] = $mouse_stim_side
      mask = stimuli/mouse_mask.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 10
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 10
      syncScreenRefresh = True
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  Routine trial_letter
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    ImageComponent mouse_none_2
      image = stimuli/mouse_none.jpg
      mask = stimuli/mouse_mask.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent image_2
      image [set every repeat] = $mouse_stim_side
      mask = stimuli/mouse_mask.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 10
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 10
      syncScreenRefresh = True
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  Routine instructions
    TextComponent instrutions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000
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      text:
        Mouse Test

        Please press the left or right mouse key, as indicated in each trial, as quickly and accurately as you can.

        (Click mouse to begin).
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1000
      syncScreenRefresh = True
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  Routine instructions_post
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    ImageComponent instructions_mouse_2
      image = stimuli/mouse_none.jpg
      mask = stimuli/mouse_mask.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine thank_you
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    TextComponent thankyou_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Done, Thank You!

        (Click mouse to end).
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
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  Routine profilepic
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    PolygonComponent drawing_area
      fillColor = white
      lineColor = -0.6706, -0.7490, -0.7490
      lineWidth = 3
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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    BrushComponent brush
      buttonRequired = True
      lineColor = 0.0824, -0.6627, 0.7725
      lineWidth = 10
      opacity = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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    PolygonComponent start_button
      fillColor = 0.8902, 0.7098, 0.6549
      lineColor = 0.6078, -0.2784, -0.2784
      lineWidth = 4
      pos = (0, -0.4)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
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    MouseComponent mouse_5
      clickable = start_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1
      stopVal [duration (s)] = 200
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
      text = Start Experiment
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    TextComponent draw_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 200
      text = Draw Something Unique in the Box Below, then click "Start Experiment" to Start!
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Flow
  Routine profilepic
  Routine instructions
  Routine instructions_post
  LoopInitiator trials_3 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.csv
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('mouse_stim_side', 'stimuli/mouse_left.jpg')]),
        OrderedDict([('mouse_stim_side', 'stimuli/mouse_right.jpg')])]
      Routine trial
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = conditions_letter.csv
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('mouse_stim_side', 'stimuli/mouse_left_letter.jpg')]),
        OrderedDict([('mouse_stim_side', 'stimuli/mouse_right_letter.jpg')])]
      Routine trial_letter
    LoopTerminator trials_2
  LoopTerminator trials_3
  Routine thank_you
